PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop Task-Lab in Psychology (Group Project)
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent sti
      color [set every repeat] = $color1
      letterHeight = 0.05
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.5
      text [set every repeat] = $word1
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    TextComponent dist
      color [set every repeat] = $color2
      letterHeight = 0.05
      pos [set every repeat] = (0,0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word2
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    KeyboardComponent key_resp
      allowedKeys = 'r','b', 'y', 'o'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine ins
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome! Let us begin.
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 4.0
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      text:
        “Press ‘r’ if text color is Red”

        “Press ‘b’ if text color is Blue “

        “Press ‘o’ if text color is Orange “

        “Press ‘y’ if text color is Yellow”
    TextComponent ins_
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.0
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      text:
        The participants would see two words reflecting upon screen one after another, one word would be in English while other would be in Roman English( Hindi), both the words would be the name of colors in respective languages.

        The participant needs to pay attention on the “TEXT COLOUR” of english word, and after the two words are reflected participants can respond the “TEXT COLOUR “ of ENGLISH WORD.
  Routine thanks
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating in the experiment! :)
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  Routine seq
  Routine seq_2
Flow
  Routine ins
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = cond(2).xlsx
    loopType = fullRandom
    nReps = 4
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    conditions:
      [{'word1': 'Red', 'color1': 'red', 'word2': 'Laal', 'color2': 'orange', 'corr_resp': 'r'},
      {'word1': 'Laal', 'color1': 'blue', 'word2': 'Red', 'color2': 'yellow', 'corr_resp': 'y'},
      {'word1': 'Red', 'color1': 'orange', 'word2': 'Laal', 'color2': 'red', 'corr_resp': 'o'},
      {'word1': 'Red', 'color1': 'blue', 'word2': 'Laal', 'color2': 'yellow', 'corr_resp': 'b'},
      {'word1': 'Blue', 'color1': 'blue', 'word2': 'Nila', 'color2': 'red', 'corr_resp': 'b'},
      {'word1': 'Nila', 'color1': 'red', 'word2': 'Blue', 'color2': 'orange', 'corr_resp': 'o'},
      {'word1': 'Blue', 'color1': 'red', 'word2': 'Nila', 'color2': 'yellow', 'corr_resp': 'r'},
      {'word1': 'Nila', 'color1': 'orange', 'word2': 'Blue', 'color2': 'yellow', 'corr_resp': 'y'},
      {'word1': 'Orange', 'color1': 'red', 'word2': 'kesari', 'color2': 'red', 'corr_resp': 'r'},
      {'word1': 'Kesari', 'color1': 'blue', 'word2': 'Orange', 'color2': 'orange', 'corr_resp': 'o'},
      {'word1': 'Orange', 'color1': 'yellow', 'word2': 'Kesari', 'color2': 'blue', 'corr_resp': 'y'},
      {'word1': 'Kesari', 'color1': 'orange', 'word2': 'Orange', 'color2': 'blue', 'corr_resp': 'b'},
      {'word1': 'Yellow', 'color1': 'red', 'word2': 'Pila', 'color2': 'yellow', 'corr_resp': 'r'},
      {'word1': 'Pila', 'color1': 'blue', 'word2': 'Yellow', 'color2': 'orange', 'corr_resp': 'o'},
      {'word1': 'Yellow', 'color1': 'yellow', 'word2': 'Pila', 'color2': 'blue', 'corr_resp': 'y'},
      {'word1': 'Pila', 'color1': 'orange', 'word2': 'Yellow', 'color2': 'blue', 'corr_resp': 'b'}]
    Routine trial
  LoopTerminator trials_1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = cond(2).xlsx
    loopType = sequential
    nReps = 4
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    conditions:
      [{'word1': 'Red', 'color1': 'red', 'word2': 'Laal', 'color2': 'orange', 'corr_resp': 'r'},
      {'word1': 'Laal', 'color1': 'blue', 'word2': 'Red', 'color2': 'yellow', 'corr_resp': 'y'},
      {'word1': 'Red', 'color1': 'orange', 'word2': 'Laal', 'color2': 'red', 'corr_resp': 'o'},
      {'word1': 'Red', 'color1': 'blue', 'word2': 'Laal', 'color2': 'yellow', 'corr_resp': 'b'},
      {'word1': 'Blue', 'color1': 'blue', 'word2': 'Nila', 'color2': 'red', 'corr_resp': 'b'},
      {'word1': 'Nila', 'color1': 'red', 'word2': 'Blue', 'color2': 'orange', 'corr_resp': 'o'},
      {'word1': 'Blue', 'color1': 'red', 'word2': 'Nila', 'color2': 'yellow', 'corr_resp': 'r'},
      {'word1': 'Nila', 'color1': 'orange', 'word2': 'Blue', 'color2': 'yellow', 'corr_resp': 'y'},
      {'word1': 'Orange', 'color1': 'red', 'word2': 'kesari', 'color2': 'red', 'corr_resp': 'r'},
      {'word1': 'Kesari', 'color1': 'blue', 'word2': 'Orange', 'color2': 'orange', 'corr_resp': 'o'},
      {'word1': 'Orange', 'color1': 'yellow', 'word2': 'Kesari', 'color2': 'blue', 'corr_resp': 'y'},
      {'word1': 'Kesari', 'color1': 'orange', 'word2': 'Orange', 'color2': 'blue', 'corr_resp': 'b'},
      {'word1': 'Yellow', 'color1': 'red', 'word2': 'Pila', 'color2': 'yellow', 'corr_resp': 'r'},
      {'word1': 'Pila', 'color1': 'blue', 'word2': 'Yellow', 'color2': 'orange', 'corr_resp': 'o'},
      {'word1': 'Yellow', 'color1': 'yellow', 'word2': 'Pila', 'color2': 'blue', 'corr_resp': 'y'},
      {'word1': 'Pila', 'color1': 'orange', 'word2': 'Yellow', 'color2': 'blue', 'corr_resp': 'b'}]
    Routine trial
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = cond(2).xlsx
    loopType = fullRandom
    nReps = 4
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    conditions:
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    Routine trial
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = cond(2).xlsx
    loopType = sequential
    nReps = 4
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    conditions:
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    Routine trial
  LoopTerminator trials_4
  Routine thanks
